def model modules as
  // Your code goes here

  def comp HH_simple as
    // Faraday constant
    var C: microF {pub: in};
    // R*T/F
    var t: second {pub: in};
    // just time
    var i_f: nanoA {pub: in};
    // declare funny current
    // declare recitifier current
    var V_init: millivolt {pub: in};
    var V: millivolt {init: V_init, pub: out};
    // declare action potential variable
    // declare and initilize the V_ode variable
    var i_tot: nanoA {pub: out};
    // declare a total current variable
    // declare a variable that effect of incoming spikes from synapses on the neuron's membrane potential
    // i_tot = i_f+i_Kr+i_Ks+i_to+i_NaK+i_NaCa+i_Na+i_CaL+i_CaT+i_KACh+i_Kur-g;
    i_tot = i_f*1.0{dimensionless};
    // i_tot = i_f+i_NaCa+i_CaL+i_CaT+i_Kr+i_Ks;
    // classic formula
    ode(V, t) = -i_tot/C;
    // if preset 1, never use differential formula to calculate the action potential
  enddef;

  def comp NES_experiments as
    var t: second {pub: in};
    var ACh_init: nM {pub: in};
    var ACh: nM {init: ACh_init, pub: out};
    var ISO_init: nM {pub: in};
    var ISO: nM {init: ISO_init, pub: out};
    var test_transp: dimensionless {init: 2000, pub: out};
    var cAMP_nif: uM {pub: out};
    var PDE_cAMP: uM {pub: in};
    // basal CaMKII mechanism maintain basal cAMP/Ca ion balance in cell
    var cAMP_basal: uM {pub: out};
    var AC_basal: nmole {pub: out};
    var ACCa_max: nmol_per_umeter2 {pub: in};
    var Area_Ca: umeter2 {pub: in};
    var EC50_Ca: nM {pub: in};
    var CaMKII: nM {pub: in};
    var AC2cAMP_conversion: per_cmeter3 {pub: in};
    // ACh bind M2R process
    var M2_max: nmol_per_umeter2 {pub: in};
    var M2R: nmole {pub: out};
    var Area_M2R: umeter2 {pub: in};
    var IC50_M2: nM {pub: in};
    var k_M2bindGi: dimensionless {pub: in};
    var Gi_M2: nmole {pub: out};
    // ISO bind beta-AR process
    var beta_ntotal: nmol_per_umeter2 {pub: in};
    var k_beta1: dimensionless {pub: in};
    var K_beta2: dimensionless {pub: in};
    var beta1_max: nmol_per_umeter2 {pub: out};
    var beta2_max: nmol_per_umeter2 {pub: out};
    var Area_betaAR: umeter2 {pub: in};
    var EC50_beta1: nM {pub: in};
    var beta1_actived: nmole {pub: out};
    var EC50_beta2: nM {pub: in};
    var beta2_actived: nmole {pub: out};
    var IC50_beta2: nM {pub: in};
    var beta2_inhibited: nmole {pub: out};
    var k_b1coupleGs: dimensionless {pub: in};
    var Gs_beta1: nmole {pub: out};
    // high ISO lead to beta2-AR bind Gi
    var PKA_init: dimensionless {pub: in};
    var PKA: dimensionless {init: PKA_init, pub: out};
    var T_PKAPbeta2: dimensionless {pub: in};
    var Gi_beta2: nmole {pub: out};
    var k_b2coupleGi: dimensionless {pub: in};
    var Gs_beta2: nmole {pub: out};
    var k_b2coupleGs: dimensionless {pub: in};
    var GS_total: nmole {pub: out};
    var Gi_total: nmole {pub: out};
    var EC50_Gs: nmole {pub: in};
    var k_Gi: dimensionless {pub: in};
    var AC_maxstimulated: nmole {pub: in};
    var AC_actived: nmole {pub: out};
    var cAMP: uM {pub: out};
    var T_cAMPPKA: uM {pub: in};
    var PKA_new: dimensionless {pub: out};
    // //*****************simplified equations about Ca to cAMP basal********************////
    AC_basal = ACCa_max*Area_Ca*pow(CaMKII, 1{dimensionless})/(pow(EC50_Ca, 1{dimensionless})+pow(CaMKII, 1{dimensionless}));
    cAMP_basal = AC2cAMP_conversion*AC_basal;
    // //*****************simplified equations about ACh to Gi********************////
    M2R = M2_max*Area_M2R*pow(ACh, 1{dimensionless})/(pow(IC50_M2, 1{dimensionless})+pow(ACh, 1{dimensionless}));
    Gi_M2 = M2R*k_M2bindGi;
    // //*****************simplified equations about ISO to Gs/Gi********************////
    // 1st step, calculate the maximum beta1-AR proportion/number in total beta-AR of SAN cell
    beta1_max = beta_ntotal*k_beta1;
    beta2_max = beta_ntotal*K_beta2;
    // from ISO to beta-AR relationship, reference HILL equation as previous paper:<PHARMACOLOGICAL CHARACTERIZATION OF THE POST JUNCTIONAL 13-ADRENOCEPTORS IN THE RAT GASTRIC FUNDUS>
    beta1_actived = beta1_max*Area_betaAR*pow(ISO, 1{dimensionless})/(pow(EC50_beta1, 1{dimensionless})+pow(ISO, 1{dimensionless}));
    beta2_actived = beta2_max*Area_betaAR*pow(ISO, 1{dimensionless})/(pow(EC50_beta2, 1{dimensionless})+pow(ISO, 1{dimensionless}));
    beta2_inhibited = beta2_max*Area_betaAR*pow(ISO, 1{dimensionless})/(pow(IC50_beta2, 1{dimensionless})+pow(ISO, 1{dimensionless}));
    Gs_beta1 = beta1_actived*k_b1coupleGs;
    Gi_beta2 = sel
      case PKA < T_PKAPbeta2:
        0{nmole};
      otherwise:
        beta2_inhibited*k_b2coupleGi;
    endsel;
    // total number of beta2-AR is limited, so, some beta2-AR phosphorylated, less Gs protein actived
    Gs_beta2 = sel
      case PKA < T_PKAPbeta2:
        beta2_actived*k_b2coupleGs;
      otherwise:
        beta2_actived*k_b2coupleGs-beta2_inhibited*k_b2coupleGi;
    endsel;
    // //*****************simplified equations about Gs/Gi to AC********************////
    GS_total = Gs_beta1+Gs_beta2;
    Gi_total = Gi_beta2+Gi_M2;
    AC_actived = AC_maxstimulated*GS_total/(EC50_Gs+GS_total+k_Gi*Gi_total);
    // //*****************simplified equations about AC to catalyze cAMP********************////
    cAMP = AC2cAMP_conversion*AC_actived;
    // //*****************simplified equations about total cAMP product********************////
    cAMP_nif = (PDE_cAMP+cAMP_basal+cAMP)*1{dimensionless};
    // //*****************simplified equation parameters about cAMP to PKA********************////
    // therefore, the PKA range is [0.0296->0.808->0.9922] while cAMP from 0 to infinity
    PKA_new = sel
      case cAMP_nif < T_cAMPPKA:
        -0.9483{dimensionless}*exp(-1{per_uM}*cAMP_nif*0.0656{dimensionless})+0.9778{dimensionless};
      otherwise:
        -0.4526{dimensionless}*exp(-1{per_uM}*cAMP_nif*0.0340{dimensionless})+0.9922{dimensionless};
    endsel;
  enddef;

  def comp Rate_modulation_experiments as
    var t: second {pub: in};
    var ACh_init: nM {pub: in};
    var ACh: nM {init: ACh_init, pub: out};
    var ISO_init: nM {pub: in};
    var ISO: nM {init: ISO_init, pub: out};
    var AC2cAMP_conversion: per_cmeter3 {pub: in};
    var Area_betaAR: umeter2 {pub: in};
    var ISO_max: nM {pub: in};
    var ISO_high: nM {pub: in};
    var EC50_beta1: nM {pub: in};
    var EC50_beta2: nM {pub: in};
    var IC50_beta2: nM {pub: in};
    var k_beta1: dimensionless {pub: in};
    var K_beta2: dimensionless {pub: in};
    var AC_maxstimulated: nmole {pub: in};
    var k_b1coupleGs: dimensionless {pub: in};
    var k_b2coupleGs: dimensionless {pub: in};
    var k_b2coupleGi: dimensionless {pub: in};
    var beta_ntotal: nmol_per_umeter2 {pub: in};
    var beta1_max: nmol_per_umeter2 {pub: out};
    var beta2_max: nmol_per_umeter2 {pub: out};
    var n_iter: dimensionless {pub: in};
    var cAMP_nif: uM {pub: out};
    var T_cAMPPKA: uM {pub: in};
    var T_PKAPbeta2: dimensionless {pub: in};
    var beta1_actived: nmole {pub: out};
    var beta2_actived: nmole {pub: out};
    var beta2_inhibited: nmole {pub: out};
    var Gs_beta1: nmole {pub: out};
    var Gs_beta2: nmole {pub: out};
    var Gi_beta2: nmole {pub: out};
    var cAMP: uM {pub: out};
    var PDE_cAMP: uM {pub: in};
    var PKA_init: dimensionless {pub: in};
    var PKA: dimensionless {init: PKA_init, pub: out};
    var M2_max: nmol_per_umeter2 {pub: in};
    var M2R: nmole {pub: out};
    var Area_M2R: umeter2 {pub: in};
    var IC50_M2: nM {pub: in};
    var Gi_M2: nmole {pub: out};
    var k_M2bindGi: dimensionless {pub: in};
    var GS_total: nmole {pub: out};
    var Gi_total: nmole {pub: out};
    var EC50_Gs: nmole {pub: in};
    var k_Gi: dimensionless {pub: in};
    var AC_actived: nmole {pub: out};
    var cAMP_basal: uM {pub: out};
    var AC_basal: nmole {pub: out};
    var ACCa_max: nmol_per_umeter2 {pub: in};
    var Area_Ca: umeter2 {pub: in};
    var EC50_Ca: nM {pub: in};
    var CaMKII: nM {pub: in};
    // //*****************simplified equations about Ca to cAMP basal********************////
    AC_basal = ACCa_max*Area_Ca*pow(CaMKII, 1{dimensionless})/(pow(EC50_Ca, 1{dimensionless})+pow(CaMKII, 1{dimensionless}));
    cAMP_basal = AC2cAMP_conversion*AC_basal;
    // //*****************simplified equations about ACh to Gi********************////
    M2R = M2_max*Area_M2R*pow(ACh, 1{dimensionless})/(pow(IC50_M2, 1{dimensionless})+pow(ACh, 1{dimensionless}));
    Gi_M2 = M2R*k_M2bindGi;
    // cAMP = AC2cAMP_conversion*AC_actived;
    // //*****************simplified equations about ISO to Gs/Gi********************////
    // 1st step, calculate the maximum beta1-AR proportion/number in total beta-AR of SAN cell
    beta1_max = beta_ntotal*k_beta1;
    beta2_max = beta_ntotal*K_beta2;
    // from ISO to beta-AR relationship, reference HILL equation as previous paper:<PHARMACOLOGICAL CHARACTERIZATION OF THE POST JUNCTIONAL 13-ADRENOCEPTORS IN THE RAT GASTRIC FUNDUS>
    beta1_actived = beta1_max*Area_betaAR*pow(ISO, 1{dimensionless})/(pow(EC50_beta1, 1{dimensionless})+pow(ISO, 1{dimensionless}));
    // for beta2-AR coupled with Gi,based on this paper: <Aryloxypropanolamine and Catecholamine Ligand Interactions with the β1-Adrenergic Receptor: Evidence for Interaction with Distinct Conformations of β1-Adrenergic Receptors>
    beta2_actived = beta2_max*Area_betaAR*pow(ISO, 1{dimensionless})/(pow(EC50_beta2, 1{dimensionless})+pow(ISO, 1{dimensionless}));
    beta2_inhibited = beta2_max*Area_betaAR*pow(ISO, 1{dimensionless})/(pow(IC50_beta2, 1{dimensionless})+pow(ISO, 1{dimensionless}));
    Gs_beta1 = beta1_actived*k_b1coupleGs;
    // Gs_beta2 = beta2_actived*k_b2coupleGs;
    Gi_beta2 = sel
      case PKA < T_PKAPbeta2:
        0{nmole};
      otherwise:
        beta2_inhibited*k_b2coupleGi;
    endsel;
    // total number of beta2-AR is limited, so, some beta2-AR phosphorylated, less Gs protein actived
    Gs_beta2 = sel
      case PKA < T_PKAPbeta2:
        beta2_actived*k_b2coupleGs;
      otherwise:
        beta2_actived*k_b2coupleGs-beta2_inhibited*k_b2coupleGi;
    endsel;
    // //*****************simplified equations about Gs/Gi to AC********************////
    GS_total = Gs_beta1+Gs_beta2;
    Gi_total = Gi_beta2+Gi_M2;
    AC_actived = AC_maxstimulated*GS_total/(EC50_Gs+GS_total+k_Gi*Gi_total);
    // //*****************simplified equations about AC to cAMP********************////
    // cAMP = cAMP_tmax*pow(AC_final, n_iter)/(pow(EC50_AC, n_iter)+pow(AC_final, n_iter));
    cAMP = AC2cAMP_conversion*AC_actived;
    // this is the hypothesis equation about Iso_concentrations control cAMP concentrations
    // the equation based on 2 papers: <Kinetic analysis of endogenous β2-adrenoceptor-mediated  cAMP GloSensorTM responses in HEK293 cells>,<Isoprenaline: A Potential Contributor in Sick Sinus Syndrome—Insights from a Mathematical Model of the Rabbit Sinoatrial Node>
    // cAMP_nif = cAMP_max*pow(Iso_1_nM, n_iter)/(pow(EC_halfmax, n_iter)+pow(Iso_1_nM, n_iter));
    // 2 different cascade control mechanism about ISO to cAMP
    // cAMP_nif = cAMP_max*pow(AC_total, n_iter)/(pow(K_dA, n_iter)+pow(AC_total, n_iter));
    cAMP_nif = cAMP+cAMP_basal-PDE_cAMP;
    // Iso_1_nM = ISO;
    // //*****************simplified equation parameters about cAMP to PKA********************////
    // therefore, the PKA range is [0.0296->0.808->0.9922] while cAMP from 0 to infinity
    PKA = sel
      case cAMP_nif < T_cAMPPKA:
        -0.9483{dimensionless}*exp(-1{per_uM}*cAMP_nif*0.0656{dimensionless})+0.9778{dimensionless};
      otherwise:
        -0.4526{dimensionless}*exp(-1{per_uM}*cAMP_nif*0.0340{dimensionless})+0.9922{dimensionless};
    endsel;
    // if preset 1, never use differential formula to calculate the action potential
  enddef;

  def comp i_f as
    // var ACh: millimolar {pub: in};
    // var ISO: nM {pub: in};
    var i_f: nanoA {pub: out};
    var i_fNa: nanoA {pub: out};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var i_fK: nanoA {pub: out};
    var g_f: microS {pub: in};
    var G_f: microS {pub: out};
    var g_f_Na: microS {pub: out};
    var G_f_Na: microS {pub: out};
    var g_f_K: microS {pub: out};
    var G_f_K: microS {pub: out};
    var Km_f: millimolar {pub: in};
    var alpha: dimensionless {pub: in};
    var t: second {pub: in};
    var V: millivolt {pub: in};
    // var RTONF: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    // var{i_f.y} y: dimensionless {priv: in};
    var y: dimensionless {pub: in};
    // in here, add a new variable parameter
    // var cAMP_nif: uM {pub: in};
    // add a blockade variable that could control in the experiments
    var blockade: dimensionless {pub: in};
    G_f = g_f/(Ko/(Ko+Km_f));
    G_f_K = G_f/(alpha+1{dimensionless});
    G_f_Na = alpha*G_f_K;
    g_f_Na = G_f_Na*Ko/(Ko+Km_f);
    g_f_K = G_f_K*Ko/(Ko+Km_f);
    i_fNa = y*g_f_Na*(V-E_Na)*(1{dimensionless}-blockade);
    i_fK = y*g_f_K*(V-E_K)*(1{dimensionless}-blockade);
    // according to the definition, I_f peak position should around action potential hyperpolarization position, but in the simulation result, not match!!!
    // it dependence on the coefficient 'tau_y'
    i_f = i_fNa+i_fK;
  enddef;

  def comp i_f_y_gate as
    var y_init: dimensionless {pub: in};
    var y: dimensionless {init: y_init, pub: out};
    var tau_y: second {pub: out};
    // ??
    var y_infinity: dimensionless {pub: out};
    // ??
    var V: millivolt {pub: in};
    // ??
    var t: second {pub: in};
    var ACh_shift: millivolt {pub: out};
    var ACh: millimolar {pub: in};
    // var ISO: nM {pub: in};
    var Iso_shift: millivolt {pub: out};
    // ??
    var Iso_shift2: millivolt {pub: out};
    // ??
    var K_If: millivolt {pub: in};
    var K05_If: uM {pub: in};
    // those 2 parameters add for new Iso_shift equation, cAMP_nif is cAMP's concentration(activated by AC, transformed by ATP, and b-AR activate AC)
    var cAMP_nif: uM {pub: in};
    var cAMP_out: dimensionless {init: 0, pub: out};
    var cAMP_out2: uM {pub: out};
    // ??
    // this variable parameter preset value just temporary, and I think use this value will make the result more closely
    var cAMP_iter: dimensionless {pub: in};
    // var cAMP_iter: dimensionless {init: 1};
    // I don't know why consider y_shift
    var y_shift: millivolt {pub: in};
    // the EC50=1.26E-8M(close), max=-7.2,nf=0.69(close) in rabbit SAN cell, based on<Analysis of the Chronotropic Effect of Acetylcholine on Sinoatrial Node Cells>
    ACh_shift = sel
      case ACh > 0{millimolar}:
        -1{millivolt}-9.898{millivolt}*pow(1{per_millimolar}*ACh, 0.618{dimensionless})/(pow(1{per_millimolar}*ACh, 0.618{dimensionless})+0.00122423{dimensionless});
      otherwise:
        0{millivolt};
    endsel;
    ode(cAMP_out, t) = 1{per_second};
    cAMP_out2 = cAMP_out*0{uM}+cAMP_nif;
    // Iso_shift = sel
    //     case Iso_1_nM > 0{dimensionless}:
    //         7.5{millivolt};
    //     otherwise:
    //         0{millivolt};
    // endsel;
    // based on Linder's paper<Sympathetic Stimulation Can Compensate for  Hypocalcaemia-Induced Bradycardia in Human and  Rabbit Sinoatrial Node Cells> table1, but not build relationship yet
    // n=7 (based on <Real-time relationship between PKA biochemical signal network dynamics and increased action potential firing rate in heart pacemaker cells> p6 that AP firing rate in response to ISO)
    // according to Fabbri model, Iso_shift_max = 7.5mV, but not find the calculation formula, so just multiple a coefficient 1.33, <An updated computational model of rabbit sinoatrial action potential to investigate the mechanisms of heart rate modulation>
    // need check later!!! the range is [-24.4,7.5],the original should multiple with 1.0e-6
    Iso_shift2 = (K_If*pow(1{per_uM}*cAMP_nif, 1{dimensionless})/(1.0{dimensionless}*pow(1{per_uM}*K05_If, 1{dimensionless})+pow(1{per_uM}*cAMP_nif, 1{dimensionless}))-18.76{millivolt})*1.33{dimensionless};
    // Iso_shift = Iso_shift2;
    Iso_shift = sel
      case Iso_shift2 > 0{millivolt}:
        Iso_shift2;
      otherwise:
        0{millivolt};
    endsel;
    // not totally match with the paper, add ACh and ISO influence factors
    // from mathematic aspect, could explain that this coefficient could delay the I_f activate time
    tau_y = 1{dimensionless}/(0.36{per_millivolt_second}*(V+148.8{millivolt}-ACh_shift-Iso_shift)/(exp(0.066{per_millivolt}*(V+148.8{millivolt}-ACh_shift-Iso_shift))-1{dimensionless})+0.1{per_millivolt_second}*(V+87.3{millivolt}-ACh_shift-Iso_shift)/(1{dimensionless}-exp(-0.2{per_millivolt}*(V+87.3{millivolt}-ACh_shift-Iso_shift))))-0.054{second};
    y_infinity = sel
      case V < -(80{millivolt}-ACh_shift-Iso_shift-y_shift):
        0.01329{dimensionless}+0.99921{dimensionless}/(1{dimensionless}+exp((V+97.134{millivolt}-ACh_shift-Iso_shift-y_shift)/8.1752{millivolt}));
      otherwise:
        0.0002501{dimensionless}*exp(-(V-ACh_shift-Iso_shift-y_shift)/12.861{millivolt});
    endsel;
    ode(y, t) = (y_infinity-y)/tau_y;
  enddef;
enddef;
