def model modified_SAN_model as
  // define units
  // trying to build a general chain reactions model later, such from ISO-betaAR, ISO-Gs, ISO-AC, ISO-cAMP, ISO-PKA
  def unit per_millivolt as
    unit volt {expo: -1.0, pref: milli};
  enddef;
  def unit coulomb_per_mole as
    unit mole {expo: -1.0};
    unit coulomb;
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0, pref: kilo};
  enddef;
  def unit per_second as
    unit second {expo: -1.0};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1.0};
  enddef;
  def unit nmole_per_umeter2 as
    unit mole {pref: nano};
    unit metre {expo: -2, pref: micro};
  enddef;
  def unit nmole as
    unit mole {pref: nano};
  enddef;
  def unit umeter2 as
    unit metre {expo: 2, pref: micro};
  enddef;
  def unit nM as
    unit mole {pref: nano};
    unit litre {expo: -1.0};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1.0};
  enddef;
  def unit nanoA_per_millimolar as
    unit millimolar {expo: -1.0};
    unit nanoA;
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1.0};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1.0};
    unit second {expo: -1.0};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1.0};
    unit second {expo: -1.0};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit litre_millimetre3 as
    unit millimetre3 {expo: -1.0};
    unit litre;
  enddef;
  def unit millimetre3 as
    unit metre {expo: 3.0, pref: milli};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit millimolar_per_second as
    unit second {expo: -1.0};
    unit millimolar;
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1.0};
  enddef;
  def unit per_millimolar2_second as
    unit millimolar {expo: -2.0};
    unit second {expo: -1.0};
  enddef;
  def unit micrometre_per_femtometre as
    unit metre {expo: -1.0, pref: femto};
    unit micrometre;
  enddef;
  // define environment parameters, and dependence relationship

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp Brain_stem as
    //  See https://brian2.readthedocs.io/en/stable/user/converting_from_integrated_form.html.
    // try to build a single model to calibrate this parameters that understand this parameter
    var t: millisecond {pub: in};
    var t_period: millisecond {init: 300};
    // notice, this is just a constant variable, not means that after 300ms, the g will disappear
    var t_relative: millisecond;
    var t_w_relative: millisecond;
    var g: nanoA {init: 0, pub: out};
    // the synaptic conductance or synaptic input to a neuron
    var tau: millisecond {init: 10};
    var w: nanoA;
    var w_start: millisecond {init: 13};
    var w_duration: millisecond {init: 1};
    var w_period: millisecond {init: 3};
    var w_n: dimensionless {init: 10};
    var w_value: nanoA {init: 0.1};
    t_relative = rem(t, t_period)-w_start;
    t_w_relative = rem(t_relative, w_period);
    w = sel
      case (t_relative >= 0{millisecond}) and (t_relative < w_n*w_period) and (t_w_relative < w_duration):
        w_value;
      otherwise:
        0{nanoA};
    endsel;
    ode(g, t) = (-g+w)/tau;
    // the formula based on the link content description
  enddef;

  def comp Membrane as
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    // universal gas constant
    var T: kelvin {init: 310, pub: out};
    // absolute temperature for 37 centidegree
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    // Faraday constant
    var C: microF {init: 5.7e-5};
    // cell capacitance
    var RTONF: millivolt {pub: out};
    // R*T/F
    var time: second {priv: out, pub: in};
    // just time
    var i_f: nanoA {pub: in};
    // declare funny current
    var i_NaK: nanoA {pub: in};
    // declare Na-K ion exchange current
    var i_NaCa: nanoA {pub: in};
    // declare Na-Ca ion exchange current
    var i_Na: nanoA {pub: in};
    // declare Na ion channel current
    var i_Kr: nanoA {pub: in};
    // declare Kr (rapid) current
    var i_Ks: nanoA {pub: in};
    // declare Ks (slow) current
    var i_to: nanoA {pub: in};
    // declare to (transient) current
    var i_CaL: nanoA {pub: in};
    // declare L type Ca ion channel current
    var i_CaT: nanoA {pub: in};
    // declare T type Ca ion channel current
    var i_KACh: nanoA {pub: in};
    // declare ACh activate K current
    var i_Kur: nanoA {pub: in};
    // declare recitifier current
    var V: millivolt {pub: out};
    // declare action potential variable
    var clamp_mode: dimensionless {init: 0};
    // declare clamp mode
    var V_clamp: millivolt {priv: in};
    // declare clamp's voltage variable
    var V_ode: millivolt {init: -47.787168};
    // declare and initilize the V_ode variable
    var i_tot: nanoA;
    // declare a total current variable
    var g: nanoA {pub: in};
    // declare a variable that effect of incoming spikes from synapses on the neuron's membrane potential
    // i_tot = i_f+i_Kr+i_Ks+i_to+i_NaK+i_NaCa+i_Na+i_CaL+i_CaT+i_KACh+i_Kur-g;
    i_tot = i_f*1.0{dimensionless}+i_Kr+i_CaL*1.0{dimensionless}+i_CaT+1.0{dimensionless}*i_NaCa+i_NaK+i_Ks+i_Na+i_to+i_Kur;
    // i_tot = i_f+i_NaCa+i_CaL+i_CaT+i_Kr+i_Ks;
    // classic formula
    ode(V_ode, time) = -i_tot/C;
    RTONF = R*T/F;
    // because preset 0, so never let V=V_clamp
    V = sel
      case clamp_mode >= 1{dimensionless}:
        V_clamp;
      otherwise:
        V_ode;
    endsel;
    // if preset 1, never use differential formula to calculate the action potential
  enddef;

  def comp Voltage_clamp as
    // I speculated that this function used to test before modify model
    var t_holding: second {init: 0.5};
    var t_test: second {init: 0.5};
    // preset test time period, initial value is 0.5s
    var V_clamp: millivolt {pub: out};
    var V_test: millivolt {init: -35};
    // only during test time, the action potential set to this value
    var V_holding: millivolt {init: -45};
    // other time, the action potential recovery to this value
    var time: second {pub: in};
    V_clamp = sel
      case (time > t_holding) and (time < t_holding+t_test):
        V_test;
      otherwise:
        V_holding;
    endsel;
    // Used to test changes in related currents observed for a specific action potential that given a specific time period
  enddef;

  def comp Rate_modulation_experiments as
    // ACh (PNS release) related to some specific ion channels, so isolate it
    // var{Rate_modulation_experiments.ACh} ACh: millimolar {init: 0, pub: out};
    var ACh: nM {init: 0, pub: out};
    // maybe we can add other parameters related ACh control
    // ISO (SNS release) also related to some specific ion channels,
    // in fact, the unit should be the same as ACh is millmolar/mM, but I don't know how to transform Iso_shift, so in here just set dimensionless
    // M: mol/m2, beta-AR:Hill equation nM, concentration*Area = mol, AC: k1*beta-AR, mol, cAMP: close ka*AC mol/m2.
    var Iso_1_nM: dimensionless {pub: out};
    // add new isoproterenol definition with unit, nanomole per liter, 1.0e-9 mole = 1 nanomole
    // in adult ventricular myocytes(pig) the basal cAMP concentration detected by the probe is 1.2uM in ventricular cell, based on <Cytoplasmic cAMP concentrations in intact cardiac myocytes>
    var ISO: nM {init: 0.000000, pub: out};
    // add some variable parameters that build equation about Iso_1_nM and cAMP_nif
    // cAMP_max is the maximal response magnitude
    // 2 set parameters [ccAMP_max,EC_halfmax,n_iter] =[13.5,0.031,1],[ccAMP_max,EC_halfmax,n_iter] = [13.1,0.0088,1], come from figure4 of <>
    // one set parameters [ccAMP_max,EC_halfmax,n_iter] = [2.1,0.007,1.4], from figure2 of <Compartmentation of cAMP Signaling in Cardiac Myocytes: A Computational Study>
    // calibrated by the experimental data, the maximum cAMP closely to 2.5uM=2500nM
    // var{Rate_modulation_experiments.cAMP_max} cAMP_max: nM {init: 4100, pub: out};
    // the max_cAMP=13.1uM, based on these papers:<Compartmentation of cAMP signaling in cardiac myocytes: a computational study>
    var AC2cAMP_conversion: uM {init: 2.7};
    // the maximum activity of beta1-AR and beta2-AR are all 100%, but in here, we suppose the unit is mol/m2
    // we still didn't have other data to calibrate the b1-AR and b2-AR activation value, so just suppose 1 micrometer square, and bind with nano mol unit beta-AR
    var Area_betaAR: umeter2 {init: 1.00};
    // based on this paper preset the AC max_enhance: <Cardiac Adenylate Cyclase Activity in Relation to Beta-Adrenergic Responses>
    // based on these papers:<Iancu RV, Jones SW, Harvey RD. Compartmentation of cAMP signaling in cardiac myocytes: a computational study. Biophys J. 2007 May 1;92(9):3317-31. doi: 10.1529/biophysj.106.095356. Epub 2007 Feb 9. Erratum in: Biophys J. 2008 Jan 15;94(2):714. PMID: 17293406; PMCID: PMC1852367.>,<>,<>
    var ISO_max: nM {init: 10000};
    // based on this paper<Agonist-induced b2-adrenoceptor desensitization and downregulation enhance pro-inflammatory cytokine release in human bronchial epithelial cells>
    var ISO_high: nM {init: 3000};
    // based on this paper<FUNCTIONAL CHARACTERIZATION OF B-ADRENOCEPTOR SUBTYPES IN RABBIT RIGHT ATRIA>, the Ki value is 22nM and 13000nM for beta1 and beta2 respectively, for rabbits
    // based on this paper: <PHARMACOLOGICAL CHARACTERIZATION OF THE POST JUNCTIONAL 13-ADRENOCEPTORS IN THE RAT GASTRIC FUNDUS>, the EC_50 value is 12nM, for rats
    // from above paper, also get the Intrinsic activity, maximum effect of agonists compared with maximum effect of isoproterenol is 1.0
    // EC_50 for human beta2-AR and ISO similar tb3c,EC50=10^(-7.57)=26.9nM: <A Full Pharmacological Analysis of the Three Turkey bAdrenoceptors and Comparison with the Human bAdrenoceptors>
    //  get for human, beta1-AR active AC by ISO EC50=31.7,paper<https://jpet.aspetjournals.org/content/294/3/923.long>,
    var EC50_beta1: nM {init: 111.7};
    var EC50_beta2: nM {init: 116.9};
    var IC50_beta2: nM {init: 4000};
    // ISO induced a sharp significant increase in IL-6 production,EC50=2uM,and influenced by 70% decrease in beta2-AR induced cAMP formation:<Agonist-induced b2-adrenoceptor desensitization and downregulation enhance pro-inflammatory cytokine release in human bronchial epithelial cells》
    // var{Rate_modulation_experiments.EC50_b2i} EC50_b2i: nM {init: 5000, pub: out};
    // beta1-AR spared 75%-80%, beta2-AR spread 20%-25%, the ratio from this paper: <Regulation of β-Adrenergic Receptors in the Heart: A Review on Emerging Therapeutic Strategies for Heart Failure>
    var k_beta1: dimensionless {init: 0.76};
    var K_beta2: dimensionless {init: 0.22};
    // use beta-AR:AC = 2.1:6 to fit the spread beta-AR activation ratio to AC, paper:<Quantification of signalling components and amplification in the beta-adrenergic-receptor-adenylate cyclase pathway in isolated adult rat ventricular myocytes>
    // such E_maxb1=2 represent that every 1 beta1-AR could activate 2 AC enzyme
    var AC_maxstimulated: dimensionless {init: 5};
    // success rate of beta-AR coupled Gs protein, based on this paper,conduct success ratio from 0.72-0.99: <Cardiac Adenylate Cyclase Activity in Relation to Beta-Adrenergic Responses>
    var k_b1coupleGs: dimensionless {init: 0.72};
    var k_b2coupleGs: dimensionless {init: 0.99};
    var k_b2coupleGi: dimensionless {init: 0.99};
    // at first, hypothesis the total beta-AR is 100%[beta1+beta2+beta3+beta4(maybe?)=100%], the exactly value will set in the future
    var beta_ntotal: dimensionless {init: 1.00};
    var beta1_max: dimensionless;
    var beta2_max: dimensionless;
    // so, we calibrate this parameter by reference ISO-cAMP curve, based on this paper fig.4B:<Cytoplasmic cAMP concentrations in intact cardiac myocytes>
    // based on this paper: <beta1-Adrenergic and beta2-Adrenergic Receptor-Mediated Adenylate Cyclase Stimulation in Nonfailing and Failing Human Ventricular Myocardium>
    // calibrated by myself
    // not found any reference parameter, just know close to linear relationship
    // based on this paper <Kinetic analysis of endogenous β2-adrenoceptor-mediated  cAMP GloSensorTM responses in HEK293 cells> figure 3 and fig.6 and table1, while concentration close to 0.01uM, increased very quickly, over it will increased very slowly
    // EC_halfmax = 10^(-2.01)=0.00977,n_iter is Hill coefficient that range from [1,2]
    // EC_halfmax is the half-maximal response concentration
    // for beta1-AR, EC_halfmax range is [1,10]nM, for beta2-AR, EC_halfmax range is [10,50]nM
    // for ISO to beta-AR, EC_half = 10^-8.11 =7.76nM, refered <A Full Pharmacological Analysis of the Three Turkey bAdrenoceptors and Comparison with the Human bAdrenoceptors>
    var n_iter: dimensionless {init: 1.0, pub: out};
    // in fact, the cAMP concentration depends on AC(Adenylyl cyclase), that activated by beta-AR
    // ISO(or other drugs) -> beta-AR -> AC -> cAMP(transformed by ATP)
    // the unit usually is nM or uM, 1uM = 1000nM
    var cAMP_nif: uM {pub: out};
    var T_cAMPPKA: nM {init: 25.87};
    var T_PKAPbeta2: dimensionless {init: 0.7};
    // need identified
    // add new definition about beta-AR with units, they are receptors
    var beta1_actived: nmole;
    var beta2_actived: nmole;
    var beta2_inhibited: nmole;
    // we suppose beta-AR activate AC is linear relationship, paper:<Cardiac Adenylate Cyclase Activity in Relation to Beta-Adrenergic Responses>
    var Gs_beta1: nmole;
    var Gs_beta2: nmole;
    var Gi_beta2: nmole;
    var cAMP: uM {pub: out};
    // based on the cascade mechanism, phosphodiesterase(PDE) will breaks phosphodiester bonds of cAMP
    var PDE_cAMP: uM {init: 0};
    // add Protein Kinase A(PKA) concentration formula
    var PKA: dimensionless {pub: out};
    // only M2R in heart, ref:<The detection of the non-M2 muscarinic receptor subtype in the rat heart atria and ventricles>
    var M2_max: dimensionless {init: 1.00};
    var M2R: dimensionless;
    var Area_M2R: umeter2 {init: 1.00};
    var IC50_M2: nM {init: 9.8};
    var Gi_M2: nmole;
    var k_M2bindGi: dimensionless {init: 0.99};
    var GS_total: dimensionless;
    var Gi_total: dimensionless;
    var EC50_Gs: dimensionless {init: 0.12};
    var k_Gi: dimensionless {init: 0.01};
    var AC_actived: nmole;
    var cAMP_basal: uM;
    var AC_basal: nmole;
    var ACCa_max: dimensionless {init: 1.00};
    // just set default value is 1, at this stage we cannot measure exact density value in SANC membrane
    var Area_Ca: umeter2 {init: 1.00};
    var EC50_Ca: nM {init: 8};
    // this should be Ca ion concentration in SAN cell of resting state,
    var CaMKII: millimolar {init: 6.4, pub: out};
    // //*****************simplified equations about Ca to cAMP basal********************////
    AC_basal = ACCa_max*Area_Ca*pow(CaMKII, n_iter)/(pow(EC50_Ca, n_iter)+pow(CaMKII, n_iter));
    cAMP_basal = AC2cAMP_conversion*AC_basal;
    // //*****************simplified equations about ACh to Gi********************////
    M2R = M2_max*Area_M2R*pow(ACh, n_iter)/(pow(IC50_M2, n_iter)+pow(ACh, n_iter));
    Gi_M2 = M2R*k_M2bindGi;
    // cAMP = AC2cAMP_conversion*AC_actived;
    // //*****************simplified equations about ISO to Gs/Gi********************////
    // 1st step, calculate the maximum beta1-AR proportion/number in total beta-AR of SAN cell
    beta1_max = beta_ntotal*k_beta1;
    beta2_max = beta_ntotal*K_beta2;
    // from ISO to beta-AR relationship, reference HILL equation as previous paper:<PHARMACOLOGICAL CHARACTERIZATION OF THE POST JUNCTIONAL 13-ADRENOCEPTORS IN THE RAT GASTRIC FUNDUS>
    beta1_actived = beta1_max*Area_betaAR*pow(ISO, n_iter)/(pow(EC50_beta1, n_iter)+pow(ISO, n_iter));
    // for beta2-AR coupled with Gi,based on this paper: <Aryloxypropanolamine and Catecholamine Ligand Interactions with the β1-Adrenergic Receptor: Evidence for Interaction with Distinct Conformations of β1-Adrenergic Receptors>
    beta2_actived = beta2_max*Area_betaAR*pow(ISO, n_iter)/(pow(EC50_beta2, n_iter)+pow(ISO, n_iter));
    beta2_inhibited = beta2_max*Area_betaAR*pow(ISO, n_iter)/(pow(IC50_beta2, n_iter)+pow(ISO, n_iter));
    Gs_beta1 = beta1_actived*k_b1coupleGs;
    // Gs_beta2 = beta2_actived*k_b2coupleGs;
    Gi_beta2 = sel
      case PKA < T_PKAPbeta2:
        0{nmole};
      otherwise:
        beta2_inhibited*k_b2coupleGi;
    endsel;
    // total number of beta2-AR is limited, so, some beta2-AR phosphorylated, less Gs protein actived
    Gs_beta2 = sel
      case PKA < T_PKAPbeta2:
        beta2_actived*k_b2coupleGs;
      otherwise:
        beta2_actived*k_b2coupleGs-beta2_inhibited*k_b2coupleGi;
    endsel;
    // //*****************simplified equations about Gs/Gi to AC********************////
    GS_total = Gs_beta1+Gs_beta2;
    Gi_total = Gi_beta2+Gi_M2;
    AC_actived = AC_maxstimulated*GS_total/(EC50_Gs+GS_total+k_Gi*Gi_total);
    // //*****************simplified equations about AC to cAMP********************////
    // cAMP = cAMP_tmax*pow(AC_final, n_iter)/(pow(EC50_AC, n_iter)+pow(AC_final, n_iter));
    cAMP = AC2cAMP_conversion*AC_actived;
    // this is the hypothesis equation about Iso_concentrations control cAMP concentrations
    // the equation based on 2 papers: <Kinetic analysis of endogenous β2-adrenoceptor-mediated  cAMP GloSensorTM responses in HEK293 cells>,<Isoprenaline: A Potential Contributor in Sick Sinus Syndrome—Insights from a Mathematical Model of the Rabbit Sinoatrial Node>
    // cAMP_nif = cAMP_max*pow(Iso_1_nM, n_iter)/(pow(EC_halfmax, n_iter)+pow(Iso_1_nM, n_iter));
    // 2 different cascade control mechanism about ISO to cAMP
    // cAMP_nif = cAMP_max*pow(AC_total, n_iter)/(pow(K_dA, n_iter)+pow(AC_total, n_iter));
    cAMP_nif = cAMP+cAMP_basal-PDE_cAMP;
    Iso_1_nM = ISO;
    // //*****************simplified equation parameters about cAMP to PKA********************////
    // therefore, the PKA range is [0.0296->0.808->0.9922] while cAMP from 0 to infinity
    PKA = sel
      case cAMP_nif < T_cAMPPKA:
        -0.9483{dimensionless}*exp(-1{dimensionless}*cAMP_nif*0.0656{dimensionless})+0.9778{dimensionless};
      otherwise:
        -0.4526{dimensionless}*exp(-1{dimensionless}*cAMP_nif*0.0340{dimensionless})+0.9922{dimensionless};
    endsel;
  enddef;

  def comp Ionic_values as
    // declare and define some fixed ion variable value, such as concentrations
    var Nai: millimolar {pub: in};
    var Nao: millimolar {init: 140, pub: out};
    var Ki: millimolar {init: 140, pub: out};
    var Ko: millimolar {init: 5.4, pub: out};
    var Ca_sub: millimolar {pub: in};
    var Cao: millimolar {init: 1.8, pub: out};
    var RTONF: millivolt {pub: in};
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    E_Na = RTONF*ln(Nao/Nai);
    E_K = RTONF*ln(Ko/Ki);
    E_Ca = 0.5{dimensionless}*RTONF*ln(Cao/Ca_sub);
  enddef;

  def comp Nai_concentration as
    // not mention on the paper, but looks like just package all Na input related variables
    var Nai: millimolar {pub: out};
    var time: second {pub: in};
    // those common variable use the membrane shared
    var F: coulomb_per_mole {pub: in};
    var V_sub: millimetre3 {pub: in};
    var V_i: millimetre3 {pub: in};
    var i_Na: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_fNa: nanoA {pub: in};
    var i_siNa: nanoA {pub: in};
    var Nai_: millimolar {init: 5};
    var Nai_clamp: dimensionless {init: 1};
    ode(Nai_, time) = (1{dimensionless}-Nai_clamp)*(-1{mA_nA})*(i_Na+i_fNa+i_siNa+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(1{litre_millimetre3}*(V_i+V_sub)*F);
    Nai = Nai_;
    // so, Na input variable is not a constant value, it will be change by dependences
  enddef;
  // funny current ion channel, in human just have little influence, activated when hyperpolarization,
  // usually related Na and K ion
  // hyperpolarization-activated cyclic nucleotide-gated (HCN) current
  // regulating the heart's rhythm and neuronal excitability
  // located in cardiac cells,neuronal cells,smooth muscle cells, endocrine cells

  def comp i_f as
    var ACh: millimolar {priv: out, pub: in};
    var Iso_1_nM: dimensionless {priv: out, pub: in};
    var i_f: nanoA {pub: out};
    var i_fNa: nanoA {pub: out};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var i_fK: nanoA {pub: out};
    var g_f: microS {init: 0.00427};
    var G_f: microS;
    var g_f_Na: microS {pub: out};
    var G_f_Na: microS;
    var g_f_K: microS {pub: out};
    var G_f_K: microS;
    var Km_f: millimolar {init: 45};
    var alpha: dimensionless {init: 0.5927};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var y: dimensionless {priv: in};
    // in here, add a new variable parameter
    var cAMP_nif: nM {priv: out, pub: in};
    // add a blockade variable that could control in the experiments
    var blockade: dimensionless {init: 0};
    G_f = g_f/(Ko/(Ko+Km_f));
    G_f_K = G_f/(alpha+1{dimensionless});
    G_f_Na = alpha*G_f_K;
    g_f_Na = G_f_Na*Ko/(Ko+Km_f);
    g_f_K = G_f_K*Ko/(Ko+Km_f);
    i_fNa = y*g_f_Na*(V-E_Na)*(1{dimensionless}-blockade);
    i_fK = y*g_f_K*(V-E_K)*(1{dimensionless}-blockade);
    // according to the definition, I_f peak position should around action potential hyperpolarization position, but in the simulation result, not match!!!
    // it dependence on the coefficient 'tau_y'
    i_f = i_fNa+i_fK;
  enddef;

  def comp i_f_y_gate as
    var y: dimensionless {init: 0.009508, pub: out};
    var tau_y: second;
    var y_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var ACh_shift: millivolt;
    var ACh: millimolar {pub: in};
    var Iso_1_nM: dimensionless {pub: in};
    var Iso_shift: millivolt;
    var K_If: millivolt {init: 24.4};
    var K05_If: nM {init: 17.33};
    // those 2 parameters add for new Iso_shift equation, cAMP_nif is cAMP's concentration(activated by AC, transformed by ATP, and b-AR activate AC)
    var Iso_shift2: millivolt;
    var cAMP_nif: nM {pub: in};
    // this variable parameter preset value just temporary, and I think use this value will make the result more closely
    var cAMP_iter: dimensionless {init: 1};
    // I don't know why consider y_shift
    var y_shift: millivolt {init: 0};
    // the EC50=1.26E-8M(close), max=-7.2,nf=0.69(close) in rabbit SAN cell, based on<Analysis of the Chronotropic Effect of Acetylcholine on Sinoatrial Node Cells>
    ACh_shift = sel
      case ACh > 0{millimolar}:
        -1{millivolt}-9.898{millivolt}*pow(1{per_millimolar}*ACh, 0.618{dimensionless})/(pow(1{per_millimolar}*ACh, 0.618{dimensionless})+0.00122423{dimensionless});
      otherwise:
        0{millivolt};
    endsel;
    // Iso_shift = sel
    //     case Iso_1_nM > 0{dimensionless}:
    //         7.5{millivolt};
    //     otherwise:
    //         0{millivolt};
    // endsel;
    // based on Linder's paper<Sympathetic Stimulation Can Compensate for  Hypocalcaemia-Induced Bradycardia in Human and  Rabbit Sinoatrial Node Cells> table1, but not build relationship yet
    // n=7 (based on <Real-time relationship between PKA biochemical signal network dynamics and increased action potential firing rate in heart pacemaker cells> p6 that AP firing rate in response to ISO)
    // according to Fabbri model, Iso_shift_max = 7.5mV, but not find the calculation formula, so just multiple a coefficient 1.33, <An updated computational model of rabbit sinoatrial action potential to investigate the mechanisms of heart rate modulation>
    // need check later!!! the range is [-24.4,7.5],the original should multiple with 1.0e-6
    Iso_shift2 = (K_If*pow(cAMP_nif, cAMP_iter)/(1.0{dimensionless}*pow(K05_If, cAMP_iter)+pow(cAMP_nif, cAMP_iter))-18.76{millivolt})*1.33{dimensionless};
    // Iso_shift = Iso_shift2;
    Iso_shift = sel
      case Iso_shift2 > 0{dimensionless}:
        Iso_shift2;
      otherwise:
        0{millivolt};
    endsel;
    // not totally match with the paper, add ACh and ISO influence factors
    // from mathematic aspect, could explain that this coefficient could delay the I_f activate time
    tau_y = 1{dimensionless}/(0.36{per_millivolt_second}*(V+148.8{millivolt}-ACh_shift-Iso_shift)/(exp(0.066{per_millivolt}*(V+148.8{millivolt}-ACh_shift-Iso_shift))-1{dimensionless})+0.1{per_millivolt_second}*(V+87.3{millivolt}-ACh_shift-Iso_shift)/(1{dimensionless}-exp(-0.2{per_millivolt}*(V+87.3{millivolt}-ACh_shift-Iso_shift))))-0.054{second};
    y_infinity = sel
      case V < -(80{millivolt}-ACh_shift-Iso_shift-y_shift):
        0.01329{dimensionless}+0.99921{dimensionless}/(1{dimensionless}+exp((V+97.134{millivolt}-ACh_shift-Iso_shift-y_shift)/8.1752{millivolt}));
      otherwise:
        0.0002501{dimensionless}*exp(-(V-ACh_shift-Iso_shift-y_shift)/12.861{millivolt});
    endsel;
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;
  // inhibit the funny current that include Ivabradine and other heart rate reducing agents
  // drugs that activate the funny current include b-Adrenergic Agonists, Cyclic AMP Analogs
  // I_CaL ion channel,
  // activated at higher membrane potentials;
  // Compared to other types of calcium channels, L-type channels have a relatively slow activation and inactivation kinetics. This slow activation allows for sustained calcium influx, which is essential for various physiological processes.
  // an AP travels along the muscle cell membrane, reaching the T-tubules, depolarization of the T-tubule membrane activates L-type Ca channels, opening them and allowing Ca ion to enter the cell, then influex of Ca triggers the release of even more Ca from the sarcoplasmic reticulum;
  // based on above process, increased intracellular Ca ion concentration binds to troponin, causes a conformational change in troponin, exposing the binding sites on the actin filaments for the myosin heads, then bind to actin, initiating the sliding filament mechanism that leads to muscle contraction;
  // locate in a wide range of cell types, muscle cells,neuronal cells,endocrine cells, endothelial cells and immune cells

  def comp i_CaL as
    var i_CaL: nanoA {pub: out};
    var i_siCa: nanoA {pub: out};
    var i_siK: nanoA {pub: out};
    var i_siNa: nanoA {pub: out};
    var ACh_block: dimensionless;
    var ACh: millimolar {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var P_CaL: nanoA_per_millimolar {init: 0.4578};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ca_sub: millimolar {priv: out, pub: in};
    var dL: dimensionless {priv: in};
    var fL: dimensionless {priv: in};
    var fCa: dimensionless {priv: in};
    var Iso_increase: dimensionless;
    var Iso_1_nM: dimensionless {priv: out, pub: in};
    // add new influence factor
    var PKA: dimensionless {pub: in};
    var Iso_increase2: dimensionless;
    // looks like set a enhance coefficients
    // Iso_increase = sel
    //     case Iso_1_nM > 0{dimensionless}:
    //         1.23{dimensionless};
    //     otherwise:
    //         1{dimensionless};
    // endsel;
    // add new equation about Iso_increase that control by PKA, b-AR -> AC -> cAMP -> PKA
    // so, if want to replace Iso_increase, need plus 1, the range is [0.2275,-5.115]
    Iso_increase2 = (-0.2152{dimensionless}+0.4707{dimensionless}*pow(PKA, 10.0808{dimensionless}))/(pow(0.7303{dimensionless}, 10.0808{dimensionless})+pow(PKA, 10.0808{dimensionless}));
    Iso_increase = sel
      case Iso_increase2 > 0{dimensionless}:
        Iso_increase2+1{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    // 3 formulas are match with the paper
    i_siCa = 2{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siK = 0.000365{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Ki-Ko*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siNa = 0.0000185{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Nai-Nao*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    // in here, also add a block coefficient
    // the EC50=9E-8M(same), max=0.56 in rabbit SAN cell, based on<Analysis of the Chronotropic Effect of Acetylcholine on Sinoatrial Node Cells>
    ACh_block = 0.31{dimensionless}*ACh/(ACh+0.00009{millimolar});
    i_CaL = (i_siCa+i_siK+i_siNa)*(1{dimensionless}-ACh_block)*1{dimensionless}*Iso_increase;
  enddef;

  def comp i_CaL_dL_gate as
    var dL: dimensionless {init: 0.001921, pub: out};
    var dL_infinity: dimensionless;
    var tau_dL: second;
    var alpha_dL: per_second;
    var beta_dL: per_second;
    var adVm: millivolt;
    var bdVm: millivolt;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Iso_1_nM: dimensionless {pub: in};
    var k_dL: millivolt {init: 4.3371};
    var V_dL: millivolt {init: -16.4508};
    var Iso_shift_dL: millivolt;
    var Iso_slope_dL: dimensionless;
    // add new variable parameter PKA
    var PKA: dimensionless {pub: in};
    // add new equation about Iso_shift/Iso_slope that control by PKA, b-AR -> AC -> cAMP -> PKA
    var Iso_shift_dL2: millivolt;
    var Iso_slope_dL2: dimensionless;
    // those are original formula by Fabbri fitting
    // Iso_shift_dL = sel
    //     case Iso_1_nM > 0{dimensionless}:
    //         -8{millivolt};
    //     otherwise:
    //         0{millivolt};
    // endsel;
    // Iso_slope_dL = sel
    //    case Iso_1_nM > 0{dimensionless}:
    //      -27{dimensionless};
    //    otherwise:
    //         0{dimensionless};
    // endsel;
    // add new equation about Iso_shift/Iso_slope that control by PKA, b-AR -> AC -> cAMP -> PKA, from Linder's paper table2
    // the Iso_shift_dL2 range is [18.76,-8.14], the Iso_slope_dL2 range is [0.657,0.935]
    // calibrated by original formula, the Iso_shift_dL should not be positive value
    Iso_shift_dL2 = -1{millivolt}*(27.5262{dimensionless}*pow(PKA, 9.281{dimensionless})/(pow(0.6615{dimensionless}, 9.281{dimensionless})+pow(PKA, 9.281{dimensionless}))-18.76{dimensionless});
    // if directly use Iso_shift_dL2, need Iso>0.095 that activate the Iso_shift_dL2 make it lower than 0
    // Iso_shift_dL = Iso_shift_dL2;
    Iso_shift_dL = sel
      case Iso_shift_dL2 > 0{dimensionless}:
        0{millivolt};
      otherwise:
        Iso_shift_dL2;
    endsel;
    // I don't know why substract 17 then the results of I_CaL are similar with original results while set Iso=0.1!!!
    // based on the PKA range is [0.0296,0.9922], so the Iso_slope_dL2 range is [2.0782,0.6572]
    // maybe the key is make Iso_slope_dL2 lower than 1(the I_CaL activated only Iso>0.95, that while PKA>0.76, then make Iso_slope_dL2<1)
    Iso_slope_dL2 = -1.4762{dimensionless}*PKA+2.1219{dimensionless};
    // increase the constant value could make the cycle more longer, but sometimes Iso=0 CANNOT active the current
    // Iso_slope_dL = Iso_slope_dL2 - 0.0{dimensionless};
    Iso_slope_dL = 0{dimensionless};
    // this formula is different from paper
    dL_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-V_dL-Iso_shift_dL)/(k_dL*(1{dimensionless}+Iso_slope_dL/100{dimensionless}))));
    // below 2 formulas are match with paper
    tau_dL = 0.001{dimensionless}/(alpha_dL+beta_dL);
    alpha_dL = -0.02839{per_millivolt_second}*(adVm+41.8{millivolt})/(exp(-(adVm+41.8{millivolt})/2.5{millivolt})-1{dimensionless})-0.0849{per_millivolt_second}*(adVm+6.8{millivolt})/(exp(-(adVm+6.8{millivolt})/4.8{millivolt})-1{dimensionless});
    // I don't know why add this switch formula
    adVm = sel
      case V == -41.8{millivolt}:
        -41.80001{millivolt};
      case V == 0{millivolt}:
        0{millivolt};
      case V == -6.8{millivolt}:
        -6.80001{millivolt};
      otherwise:
        V;
    endsel;
    beta_dL = 0.01143{per_millivolt_second}*(bdVm+1.8{millivolt})/(exp((bdVm+1.8{millivolt})/2.5{millivolt})-1{dimensionless});
    // same question, looks like it doesn't need
    bdVm = sel
      case V == -1.8{millivolt}:
        -1.80001{millivolt};
      otherwise:
        V;
    endsel;
    ode(dL, time) = (dL_infinity-dL)/tau_dL;
  enddef;

  def comp i_CaL_fL_gate as
    var fL: dimensionless {init: 0.846702, pub: out};
    var fL_infinity: dimensionless;
    var tau_fL: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var shift_fL: millivolt {init: 0};
    var k_fL: millivolt {init: 0};
    fL_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+37.4{millivolt}+shift_fL)/(5.3{millivolt}+k_fL)));
    tau_fL = 0.001{dimensionless}*(44.3{second}+230{second}*exp(-sqr((V+36{millivolt})/10{millivolt})));
    ode(fL, time) = (fL_infinity-fL)/tau_fL;
  enddef;

  def comp i_CaL_fCa_gate as
    var fCa: dimensionless {init: 0.844449, pub: out};
    var alpha_fCa: per_second {init: 0.0075};
    var fCa_infinity: dimensionless;
    var tau_fCa: second;
    var Km_fCa: millimolar {init: 0.000338};
    var V: millivolt {pub: in};
    var Ca_sub: millimolar {pub: in};
    var time: second {pub: in};
    fCa_infinity = Km_fCa/(Km_fCa+Ca_sub);
    tau_fCa = 0.001{dimensionless}*fCa_infinity/alpha_fCa;
    ode(fCa, time) = (fCa_infinity-fCa)/tau_fCa;
  enddef;
  // block this channel drugs: calcium channel blockers that such as nifedipine/Amlodipine/Nicardipine/Verapamil/Diltiazem, calcium channel agonists that such as Bay K 8644;
  // not have directly activated drugs, but some indirect information that such as b-Adreergic Agonists
  // I_CaT ion channel
  // activated at relatively negative membrane potentials compared to other calcium channels, it is a 'low-voltage activated' channel,
  // 1)T-type channels open at membrane potentials close to the resting potential (-60mV to -40mV); 2)rapid inactivation;3)sensitivity to Nickel; 4)smaller conductance;
  // low-voltage activation allows it contribute to generation of AP/repetitive firing/pacemaker activity, or regular heart rate
  // primarily in the nervous system, heart, smooth muscle

  def comp i_CaT as
    var i_CaT: nanoA {pub: out};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var P_CaT: nanoA_per_millimolar {init: 0.04132};
    var RTONF: millivolt {pub: in};
    var Cao: millimolar {pub: in};
    var Ca_sub: millimolar {priv: out, pub: in};
    var dT: dimensionless {priv: in};
    var fT: dimensionless {priv: in};
    i_CaT = 2{dimensionless}*P_CaT*V/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*V*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*V/RTONF))*dT*fT;
  enddef;

  def comp i_CaT_dT_gate as
    var dT: dimensionless {init: 0.268909, pub: out};
    var dT_infinity: dimensionless;
    var tau_dT: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    dT_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+38.3{millivolt})/5.5{millivolt}));
    tau_dT = 0.001{second}/(1.068{dimensionless}*exp((V+38.3{millivolt})/30{millivolt})+1.068{dimensionless}*exp(-(V+38.3{millivolt})/30{millivolt}));
    ode(dT, time) = (dT_infinity-dT)/tau_dT;
  enddef;

  def comp i_CaT_fT_gate as
    var fT: dimensionless {init: 0.020484, pub: out};
    var fT_infinity: dimensionless;
    var tau_fT: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var offset_fT: second {init: 0};
    fT_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+58.7{millivolt})/3.8{millivolt}));
    // this formula add an offset coefficient, not the same as paper
    tau_fT = 1{second}/(16.67{dimensionless}*exp(-(V+75{millivolt})/83.3{millivolt})+16.67{dimensionless}*exp((V+75{millivolt})/15.38{millivolt}))+offset_fT;
    ode(fT, time) = (fT_infinity-fT)/tau_fT;
  enddef;
  // this channel could be blocked by inorganic blockers that such as Nickel/Cadmium/Zinc/Lanthanum, organic blockers that such as Amiloride/Ethosuximide/Mibefradil/Efonidipine, other blockers that such as Anticonvulsants/Barbiturates
  // not have directly activated drugs, indrect drug that such as Efonidipine/Anticonvulsants
  // I_Kr ion channel, rapidly activating delayed rectifier K ion current
  // important to the repolarization phase of the cardiac AP, responsible for the rapid decline in membrane potential after initial depolarization, contributing to the overall shape and duration of the action potential;
  // activated by membrane depolarization, but very slow activation compared to the Na current for initial depolarization, deactivateds rapidly;
  // primarily found in cardiac cells, such as ventricular myocytes, artial myocytes,

  def comp i_Kr as
    var i_Kr: nanoA {pub: out};
    var g_Kr: microS {init: 0.00424};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var paS: dimensionless {priv: in};
    var paF: dimensionless {priv: in};
    var piy: dimensionless {priv: in};
    var RTONF: millivolt {pub: in};
    i_Kr = g_Kr*(V-E_K)*(0.9{dimensionless}*paF+0.1{dimensionless}*paS)*piy;
  enddef;

  def comp i_Kr_pa_gate as
    var paS: dimensionless {init: 0.283185, pub: out};
    var paF: dimensionless {init: 0.011068, pub: out};
    var pa_infinity: dimensionless;
    var alfapaF: per_second;
    var betapaF: per_second;
    var tau_paS: second;
    var tau_paF: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    // why write those 2 formual? and never used
    alfapaF = 1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/6.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/11.9{millivolt})+0.96{dimensionless}*exp(-V/18.5{millivolt})));
    betapaF = 4{dimensionless}*((37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))/0.84655354{second}-1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/10.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))));
    // below all the same as the paper
    pa_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+10.0144{millivolt})/7.6607{millivolt}));
    tau_paS = 0.84655354{second}/(4.2{dimensionless}*exp(V/17{millivolt})+0.15{dimensionless}*exp(-V/21.6{millivolt}));
    tau_paF = 1{second}/(30{dimensionless}*exp(V/10{millivolt})+exp(-V/12{millivolt}));
    ode(paS, time) = (pa_infinity-paS)/tau_paS;
    ode(paF, time) = (pa_infinity-paF)/tau_paF;
  enddef;

  def comp i_Kr_pi_gate as
    var piy: dimensionless {init: 0.709051, pub: out};
    var pi_infinity: dimensionless;
    var tau_pi: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    tau_pi = 1{second}/(100{dimensionless}*exp(-V/54.645{millivolt})+656{dimensionless}*exp(V/106.157{millivolt}));
    pi_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.6{millivolt})/17.1{millivolt}));
    ode(piy, time) = (pi_infinity-piy)/tau_pi;
  enddef;
  // this channel current could be blocked by Antiarrhythmics that such as dofetillide/sotalol, Antibiotics that such as erythromycin/moxifloxacin,E-4031
  // this channel current can be enhanced by NS3623
  // I_Ks ion channel, slowly activating delayed rectifier K ion current
  // contribute significantly to the repolarization reserve, can prolong the action potential duration
  // activated by depolarization
  // primarily in the cardiac cells, especially ventricular myocytes

  def comp i_Ks as
    var i_Ks: nanoA {pub: out};
    var g_Ks: microS {pub: out};
    var g_Ks_: microS {init: 0.00065};
    var E_Ks: millivolt;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var RTONF: millivolt {pub: in};
    var n: dimensionless {priv: in};
    var Iso_1_nM: dimensionless {priv: out, pub: in};
    // add new variable parameter PKA
    var PKA: dimensionless {priv: in};
    // add new equation about Iso_increase that control by PKA, b-AR -> AC -> cAMP -> PKA
    var Iso_increase2: dimensionless;
    var Iso_increase: dimensionless;
    // define Iso_increase value
    // from this article <Isoprenaline: A Potential Contributor in Sick Sinus Syndrome—Insights from a Mathematical Model of the Rabbit Sinoatrial Node>, the result current should be new_I_ks=old_I_ks*(1+Iso_increase)
    // the Iso_increase2 range is [-7.38,0.20]
    // Iso_increase = Iso_increase2+1{dimensionless};
    Iso_increase2 = (-0.2152{dimensionless}+0.4357{dimensionless}*pow(PKA, 10.0808{dimensionless}))/(pow(0.7042{dimensionless}, 10.0808{dimensionless})+pow(PKA, 10.0808{dimensionless}));
    Iso_increase = sel
      case Iso_increase2 > 0{dimensionless}:
        Iso_increase2+1{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    // add a switch coefficient that shift the voltage value, I think it will make this channel current shift
    g_Ks = sel
      case Iso_1_nM > 0{dimensionless}:
        Iso_increase*g_Ks_;
      otherwise:
        g_Ks_;
    endsel;
    E_Ks = RTONF*ln((Ko+0.12{dimensionless}*Nao)/(Ki+0.12{dimensionless}*Nai));
    i_Ks = g_Ks*(V-E_Ks)*sqr(n);
  enddef;

  def comp i_Ks_n_gate as
    var n: dimensionless {init: 0.1162, pub: out};
    var n_infinity: dimensionless;
    var tau_n: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Iso_1_nM: dimensionless {pub: in};
    var Iso_shift: millivolt;
    var alpha_n: per_second;
    var beta_n: per_second;
    // add new input variable parameters
    var PKA: dimensionless {pub: in};
    var Iso_shift2: millivolt;
    // add new equation about Iso_shift that control by PKA, b-AR -> AC -> cAMP -> PKA, from Linder's paper table3
    // the Iso_shift2 range is [18.76,-14.3]
    // the same as I_CaL and I_f, usually need Iso_shift2 lower than 0
    Iso_shift2 = -1{millivolt}*(34.4376{dimensionless}*pow(PKA, 9.281{dimensionless})/(pow(0.7042{dimensionless}, 9.281{dimensionless})+pow(PKA, 9.281{dimensionless}))-18.76{dimensionless});
    // Iso_shift = Iso_shift2;
    Iso_shift = sel
      case Iso_shift2 > 0{dimensionless}:
        0{millivolt};
      otherwise:
        Iso_shift2;
    endsel;
    // original Fabbri fitting
    // Iso_shift = sel
    //     case Iso_1_nM > 0{dimensionless}:
    //         -14{millivolt};
    //     otherwise:
    //         0{millivolt};
    // endsel;
    n_infinity = sqrt(1{dimensionless}/(1{dimensionless}+exp(-(V+0.6383{millivolt}-Iso_shift)/10.7071{millivolt})));
    tau_n = 1{dimensionless}/(alpha_n+beta_n);
    alpha_n = 28{per_second}/(1{dimensionless}+exp(-(V-40{millivolt}-Iso_shift)/3{millivolt}));
    beta_n = 1{per_second}*exp(-(V-Iso_shift-5{millivolt})/25{millivolt});
    ode(n, time) = (n_infinity-n)/tau_n;
  enddef;
  // there are no rugs known to specifically activate this channel, but some drugs can indirectly influence activity that such as calcium concentration or phosphorylation states
  // some drugs can inhibit this channel that such as Fluoxetine and its metabolite norfluoxetine, HMR 1556, other drugs such as tramadol and codeine
  // I_KACh ion channel, ACh-activated K ion current
  // regulating atrial action potentials and heart rate
  // Acetylcholine binds to M2 muscarinic recepts->activates a series of signaling events involving G proteins->open rectifying K channels->causing hyperpolarization
  // mainly found in the cardiac cells such as atrial myocytes,

  def comp i_KACh as
    var ACh: millimolar {priv: out, pub: in};
    var i_KACh: nanoA {pub: out};
    var g_KACh: microS {init: 0.00345};
    var E_K: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var a: dimensionless {priv: in};
    var ACh_on: dimensionless {init: 1};
    // add a switch
    // this paper's i_KACh equation different: <Analysis of the Chronotropic Effect of Acetylcholine on Sinoatrial Node Cells>
    i_KACh = sel
      case ACh > 0{millimolar}:
        ACh_on*g_KACh*(V-E_K)*(1{dimensionless}+exp((V+20{millivolt})/20{millivolt}))*a;
      otherwise:
        0{nanoA};
    endsel;
  enddef;

  def comp i_KACh_a_gate as
    var a: dimensionless {init: 0.00277, pub: out};
    var alpha_a: per_second;
    var beta_a: per_second;
    var a_infinity: dimensionless;
    var tau_a: second;
    var ACh: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_a = (3.5988{per_second}-0.025641{per_second})/(1{dimensionless}+0.0000012155{dimensionless}/pow(1{per_millimolar}*ACh, 1.6951{dimensionless}))+0.025641{per_second};
    beta_a = 10{per_second}*exp(0.0133{per_millivolt}*(V+40{millivolt}));
    a_infinity = alpha_a/(alpha_a+beta_a);
    tau_a = 1{dimensionless}/(alpha_a+beta_a);
    ode(a, time) = (a_infinity-a)/tau_a;
  enddef;
  // some drugs can inhibit this channel that such as fluoxetine/norfluoxetine/HMR 1556 but also increasing the risk of arrhythmias
  // no drugs are known to specifically activate this channel
  // I_to ion channel, transient outward K ion current
  // plays a significant role in the repolarization phase, can prolong the action potential duration, shape the rapid initial repolarization phase,
  // activated rapidly by membrane depolarization, contributing to the initial rapid repolarization phase, also inactivates rapidly
  // primarily in cardiac cells, particularly in ventricular myocytes

  def comp i_to as
    var i_to: nanoA {pub: out};
    var g_to: microS {init: 3.5e-3};
    var E_K: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var q: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(V-E_K)*q*r;
  enddef;

  def comp i_to_q_gate as
    var q: dimensionless {init: 0.430836, pub: out};
    var q_infinity: dimensionless;
    var tau_q: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    q_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+49{millivolt})/13{millivolt}));
    tau_q = 0.001{dimensionless}*0.6{dimensionless}*(65.17{dimensionless}/(0.57{per_second}*exp(-0.08{per_millivolt}*(V+44{millivolt}))+0.065{per_second}*exp(0.1{per_millivolt}*(V+45.93{millivolt})))+10.1{second});
    ode(q, time) = (q_infinity-q)/tau_q;
  enddef;

  def comp i_to_r_gate as
    var r: dimensionless {init: 0.014523, pub: out};
    var r_infinity: dimensionless;
    var tau_r: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-19.3{millivolt})/15{millivolt}));
    tau_r = 0.001{dimensionless}*0.66{dimensionless}*1.4{dimensionless}*(15.59{second}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(V+23.84{millivolt})))+2.98{second});
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;
  // this channel can be inhibit by some drugs that such as 4-aminopyridine(4-AP), other Kv4 channel blockers, but may lead to prolonged APD and increased susceptibility to cardiac arrhythmias
  // no known drugs can directly activate or enhance this channel
  // I_Na ion channel, Na ion current
  // responsbile for the rapid depolarization phase of the action potential, leading to the generation of electrical signals that transmit information throughout the body
  // activated by depolarization of the cell membrane, when membrane potential become more positive the channel's activation gate opens, allowing Na ion flow into the cell,then rapid inactivation
  // rapid influex of Na ion also propagating the signal to neighboring regions and triggers muscle contraction
  // located in excitable cells include neurons and muscles

  def comp i_Na as
    var i_Na_: nanoA {pub: out};
    var i_Na_L: nanoA {pub: out};
    var i_Na: nanoA {pub: out};
    var g_Na: microS {init: 0.0223};
    var g_Na_L: microS {init: 0};
    var E_mh: millivolt;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_mh = RTONF*ln((Nao+0.12{dimensionless}*Ko)/(Nai+0.12{dimensionless}*Ki));
    i_Na_ = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
    // not sure why in here add a new algorithm to calculate the i_Na, although preset 0
    i_Na_L = g_Na_L*pow(m, 3{dimensionless})*(V-E_mh);
    i_Na = i_Na_+i_Na_L;
  enddef;

  def comp i_Na_m_gate as
    var m: dimensionless {init: 0.447724, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var m_infinity: dimensionless;
    var tau_m: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+42.0504{millivolt})/8.3106{millivolt}));
    E0_m = V+41{millivolt};
    // if the voltage too small, use preset parameter
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    tau_m = 1{dimensionless}/(alpha_m+beta_m);
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp i_Na_h_gate as
    var h: dimensionless {init: 0.003058, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var h_infinity: dimensionless;
    var tau_h: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+69.804{millivolt})/4.4565{millivolt}));
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}))+1{dimensionless});
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;
  // this channel can be blocked by some drugs that such as Anticonvulsants/Local Anesthetics/Antiarrhythmics, but maybe lead to cardiac arrhythmias and heart failure
  // no known drugs can directly activate or enhance this channel
  // I_NaK ion channdels, Na ion and K ion exchanger current, generated by the sodium-potassium pump, also known as Na+/K+-ATPase
  // actively transport Na ion out of the cell and K ion into the cell, not a real channel, maintaing the resting membrane potential and generate action potentials, maintain ionic homeostasis
  // the pump's action is electrogenic, meaning it contributes to the membrane potential by moving more positive charges out of the cell than it brings in
  // activated by depolarization and repolarization, play roles in muscle contraction
  // it spread all cells that include Na/K ions transmit

  def comp i_NaK as
    var i_NaK: nanoA {pub: out};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Km_Kp: millimolar {init: 1.4};
    var Km_Nap: millimolar {init: 14};
    var i_NaK_max: nanoA {init: 0.08105};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var Iso_increase: dimensionless;
    var Iso_1_nM: dimensionless {priv: out, pub: in};
    // add new variable parameter PKA
    var PKA: dimensionless {priv: in};
    // add new equation about Iso_increase that control by PKA, b-AR -> AC -> cAMP -> PKA, from Linder's paper table3
    var Iso_increase2: dimensionless;
    // the Iso_increase2 range is [-7.38,0.20]
    Iso_increase2 = (-0.2152{dimensionless}+0.4357{dimensionless}*pow(PKA, 10.0808{dimensionless}))/(pow(0.7042{dimensionless}, 10.0808{dimensionless})+pow(PKA, 10.0808{dimensionless}));
    Iso_increase = sel
      case Iso_increase2 > 0{dimensionless}:
        Iso_increase2+1.0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    // add a enhanced coefficient
    // original Fabbri fitting
    // Iso_increase = sel
    //     case Iso_1_nM > 0{dimensionless}:
    //         1.2{dimensionless};
    //     otherwise:
    //         1{dimensionless};
    // endsel;
    i_NaK = Iso_increase*i_NaK_max*pow(1{dimensionless}+pow(Km_Kp/Ko, 1.2{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+pow(Km_Nap/Nai, 1.3{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+exp(-(V-E_Na+110{millivolt})/20{millivolt}), -1{dimensionless});
  enddef;
  // this pump can be blocked by cardiac glycosides that such as digoxin/ouabain, and Spironolactone
  // Glucocorticoids can activate the Na-K pump
  // I_NaCa ion channels, Na ion and Ca ion exchanger current
  // regulating intracellular calcium levels in various cell types, especially in heart muscle cells (cardiomyocytes)
  // exchange can occur in both directions, forward: 3 Na into the cell while 1 Ca out; reserve: 1 Ca into the cell while 3 Na out, maintain ionic homeostasis
  // forward mode contribute to the repolarization phase, and reverse mode contribute to arrhythmias
  // located in the plasma membranes of excitable cells that include neurons/muscle cells/cardiac cells, also in mitochondria and endoplasmic reticulum of excitable cells

  def comp i_NaCa as
    var i_NaCa: nanoA {pub: out};
    var K_NaCa: nanoA {init: 3.343};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var Qci: dimensionless {init: 0.1369};
    var Qn: dimensionless {init: 0.4315};
    var Qco: dimensionless {init: 0};
    var K3ni: millimolar {init: 26.44};
    var Kci: millimolar {init: 0.0207};
    var K1ni: millimolar {init: 395.3};
    var K2ni: millimolar {init: 2.289};
    var Kcni: millimolar {init: 26.44};
    var K3no: millimolar {init: 4.663};
    var K1no: millimolar {init: 1628};
    var K2no: millimolar {init: 561.4};
    var Kco: millimolar {init: 3.663};
    var do: dimensionless;
    var di: dimensionless;
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var blockade_NaCa: dimensionless {init: 0};
    // add a blockade coefficient about Na-Ca pump
    i_NaCa = (1{dimensionless}-blockade_NaCa)*K_NaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k43 = Nai/(K3ni+Nai);
    k12 = Ca_sub/Kci*exp(-Qci*V/RTONF)/di;
    k14 = Nai/K1ni*Nai/K2ni*(1{dimensionless}+Nai/K3ni)*exp(Qn*V/(2{dimensionless}*RTONF))/di;
    k41 = exp(-Qn*V/(2{dimensionless}*RTONF));
    di = 1{dimensionless}+Ca_sub/Kci*(1{dimensionless}+exp(-Qci*V/RTONF)+Nai/Kcni)+Nai/K1ni*(1{dimensionless}+Nai/K2ni*(1{dimensionless}+Nai/K3ni));
    k34 = Nao/(K3no+Nao);
    k21 = Cao/Kco*exp(Qco*V/RTONF)/do;
    k23 = Nao/K1no*Nao/K2no*(1{dimensionless}+Nao/K3no)*exp(-Qn*V/(2{dimensionless}*RTONF))/do;
    k32 = exp(Qn*V/(2{dimensionless}*RTONF));
    do = 1{dimensionless}+Cao/Kco*(1{dimensionless}+exp(Qco*V/RTONF))+Nao/K1no*(1{dimensionless}+Nao/K2no*(1{dimensionless}+Nao/K3no));
  enddef;
  // block: ORM-10962/ORM-10103/KB-R7943
  // no known drugs that specifically target the Na-Ca pump to directly activate it, but Cardia glycosides that such as digoxin/ouabain could indirectly it
  // I_Kur ion channel, ultra-rapid activating delayed rectifier K ion current
  // contribute to the repolarization phase, by only allowing K ions to flow out of the cell
  // important for the atria, ensure that the atria contract and pump blood efficiently, and preventing atrial fibrillation, inhibit it will increase the heart risk
  // activated very quickly after depolarization,
  // located in atrial myocytes

  def comp i_Kur as
    var i_Kur: nanoA {pub: out};
    var g_Kur: microS {init: 0.1539e-3};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var r_Kur: dimensionless {priv: in};
    var s_Kur: dimensionless {priv: in};
    i_Kur = g_Kur*r_Kur*s_Kur*(V-E_K);
  enddef;

  def comp i_Kur_rKur_gate as
    var r_Kur: dimensionless {init: 0.011845, pub: out};
    var tau_r_Kur: second;
    var r_Kur_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r_Kur, time) = (r_Kur_infinity-r_Kur)/tau_r_Kur;
    r_Kur_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+6{millivolt})/(-8.6{millivolt})));
    tau_r_Kur = 0.009{second}/(1{dimensionless}+exp((V+5{millivolt})/12{millivolt}))+0.0005{second};
  enddef;

  def comp i_Kur_sKur_gate as
    var s_Kur: dimensionless {init: 0.845304, pub: out};
    var tau_s_Kur: second;
    var s_Kur_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(s_Kur, time) = (s_Kur_infinity-s_Kur)/tau_s_Kur;
    s_Kur_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+7.5{millivolt})/10{millivolt}));
    tau_s_Kur = 0.59{second}/(1{dimensionless}+exp((V+60{millivolt})/10{millivolt}))+3.05{second};
  enddef;
  // 4-AP can block this current lead to a prolongation of the action potential duration,
  // some protein kinases also can regulate this current either increase or decrease depending on the specific kinase involved;
  // Ca ion release flux (J_rel) from SR via RyRs

  def comp Ca_SR_release as
    var j_SRCarel: millimolar_per_second {pub: out};
    var R: dimensionless {init: 0.9308};
    var O: dimensionless {init: 6.181512e-9};
    var I: dimensionless {init: 4.595622e-10};
    var RI: dimensionless {init: 0.069199};
    var ks: per_second {init: 148041085.1};
    var MaxSR: dimensionless {init: 15};
    var MinSR: dimensionless {init: 1};
    var EC50_SR: millimolar {init: 0.6829};
    // original value is 0.45
    var HSR: dimensionless {init: 2.5};
    var koSRCa: per_millimolar2_second;
    var kiSRCa: per_millimolar_second;
    var koCa: per_millimolar2_second {init: 10000};
    var kiCa: per_millimolar_second {init: 500};
    var kCaSR: dimensionless;
    var kim: per_second {init: 5};
    var kom: per_second {init: 660};
    var time: second {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    var diff: millimolar;
    var P_tot: dimensionless;
    // the KoCa should calibrated by formula, but I don't know how to get RyR_min and other parameters, based on Linder's paper table4
    j_SRCarel = ks*O*(Ca_jsr-Ca_sub);
    diff = Ca_jsr-Ca_sub;
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(EC50_SR/Ca_jsr, HSR));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    ode(R, time) = kim*RI-kiSRCa*Ca_sub*R-(koSRCa*sqr(Ca_sub)*R-kom*O);
    ode(O, time) = koSRCa*sqr(Ca_sub)*R-kom*O-(kiSRCa*Ca_sub*O-kim*I);
    ode(I, time) = kiSRCa*Ca_sub*O-kim*I-(kom*I-koSRCa*sqr(Ca_sub)*RI);
    ode(RI, time) = kom*I-koSRCa*sqr(Ca_sub)*RI-(kim*RI-kiSRCa*Ca_sub*R);
    P_tot = R+O+I+RI;
  enddef;
  // intracellular Ca ion fluxes

  def comp Ca_intracellular_fluxes as
    var j_Ca_dif: millimolar_per_second {pub: out};
    var j_up: millimolar_per_second {pub: out};
    var j_tr: millimolar_per_second {pub: out};
    var tau_dif_Ca: second {init: 5.469e-5};
    var tau_tr: second {init: 0.04};
    var P_up: millimolar_per_second;
    var P_up_basal: millimolar_per_second {init: 5};
    var b_up: dimensionless;
    var ACh: millimolar {pub: in};
    var Iso_1_nM: dimensionless {pub: in};
    var K_up: millimolar {init: 0.000286113};
    var Ca_nsr: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    var slope_up: millimolar {init: 5e-5};
    b_up = sel
      case Iso_1_nM > 0{dimensionless}:
        -0.25{dimensionless};
      case ACh > 0{millimolar}:
        0.7{dimensionless}*ACh/(0.00009{millimolar}+ACh);
      otherwise:
        0{dimensionless};
    endsel;
    P_up = P_up_basal*(1{dimensionless}-b_up);
    j_Ca_dif = (Ca_sub-Cai)/tau_dif_Ca;
    j_up = P_up/(1{dimensionless}+exp((-Cai+K_up)/slope_up));
    j_tr = (Ca_nsr-Ca_jsr)/tau_tr;
  enddef;
  // Ca ion buffering

  def comp Ca_buffering as
    var TC_tot: millimolar {init: 0.031, pub: out};
    var TMC_tot: millimolar {init: 0.062, pub: out};
    var CM_tot: millimolar {init: 0.045, pub: out};
    var CQ_tot: millimolar {init: 10, pub: out};
    var delta_fTC: per_second {pub: out};
    var delta_fTMC: per_second {pub: out};
    var delta_fCMs: per_second {pub: out};
    var delta_fCMi: per_second {pub: out};
    var delta_fCQ: per_second {pub: out};
    var delta_fTMM: per_second;
    var fTMM: dimensionless {init: 0.653777};
    var fCMi: dimensionless {init: 0.217311};
    var fCMs: dimensionless {init: 0.158521};
    var fTC: dimensionless {init: 0.017929};
    var fTMC: dimensionless {init: 0.259947};
    var fCQ: dimensionless {init: 0.138975};
    var kf_TC: per_millimolar_second {init: 88800};
    var kf_TMM: per_millimolar_second {init: 2277};
    var kf_TMC: per_millimolar_second {init: 227700};
    var kf_CM: per_millimolar_second {init: 1.642e6};
    var kf_CQ: per_millimolar_second {init: 175.4};
    var kb_TC: per_second {init: 446};
    var kb_TMC: per_second {init: 7.51};
    var kb_TMM: per_second {init: 751};
    var kb_CM: per_second {init: 542};
    var kb_CQ: per_second {init: 445};
    var time: second {pub: in};
    var Mgi: millimolar {init: 2.5};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    ode(fTC, time) = delta_fTC;
    delta_fTC = kf_TC*Cai*(1{dimensionless}-fTC)-kb_TC*fTC;
    ode(fTMC, time) = delta_fTMC;
    delta_fTMC = kf_TMC*Cai*(1{dimensionless}-(fTMC+fTMM))-kb_TMC*fTMC;
    ode(fTMM, time) = delta_fTMM;
    delta_fTMM = kf_TMM*Mgi*(1{dimensionless}-(fTMC+fTMM))-kb_TMM*fTMM;
    ode(fCMi, time) = delta_fCMi;
    delta_fCMi = kf_CM*Cai*(1{dimensionless}-fCMi)-kb_CM*fCMi;
    ode(fCMs, time) = delta_fCMs;
    delta_fCMs = kf_CM*Ca_sub*(1{dimensionless}-fCMs)-kb_CM*fCMs;
    ode(fCQ, time) = delta_fCQ;
    delta_fCQ = kf_CQ*Ca_jsr*(1{dimensionless}-fCQ)-kb_CQ*fCQ;
  enddef;
  // Dynamics of Ca ion concentrations in cell compartments

  def comp Ca_dynamics as
    var Cai: millimolar {init: 9.15641e-6, pub: out};
    var Ca_nsr: millimolar {init: 0.435148, pub: out};
    var Ca_jsr: millimolar {init: 0.409551, pub: out};
    var Ca_sub: millimolar {init: 6.226104e-5, pub: out};
    var V_i: millimetre3 {pub: in};
    var V_jsr: millimetre3 {pub: in};
    var V_nsr: millimetre3 {pub: in};
    var V_sub: millimetre3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_siCa: nanoA {pub: in};
    var i_CaT: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var j_SRCarel: millimolar_per_second {pub: in};
    var j_Ca_dif: millimolar_per_second {pub: in};
    var j_tr: millimolar_per_second {pub: in};
    var j_up: millimolar_per_second {pub: in};
    var TMC_tot: millimolar {pub: in};
    var CM_tot: millimolar {pub: in};
    var TC_tot: millimolar {pub: in};
    var CQ_tot: millimolar {pub: in};
    var delta_fTMC: per_second {pub: in};
    var delta_fCMi: per_second {pub: in};
    var delta_fCMs: per_second {pub: in};
    var delta_fTC: per_second {pub: in};
    var delta_fCQ: per_second {pub: in};
    ode(Cai, time) = 1{dimensionless}*(j_Ca_dif*V_sub-j_up*V_nsr)/V_i-(CM_tot*delta_fCMi+TC_tot*delta_fTC+TMC_tot*delta_fTMC);
    ode(Ca_sub, time) = j_SRCarel*V_jsr/V_sub-((i_siCa+i_CaT-2{dimensionless}*i_NaCa)/(2{dimensionless}*F*V_sub)+j_Ca_dif+CM_tot*delta_fCMs);
    ode(Ca_nsr, time) = j_up-j_tr*V_jsr/V_nsr;
    ode(Ca_jsr, time) = j_tr-(j_SRCarel+CQ_tot*delta_fCQ);
  enddef;

  def comp Cell_parameters as
    var V_sub: millimetre3 {pub: out};
    var V_jsr: millimetre3 {pub: out};
    var V_nsr: millimetre3 {pub: out};
    var V_i: millimetre3 {pub: out};
    var V_cell: millimetre3;
    var V_jsr_part: dimensionless {init: 0.0012};
    var V_i_part: dimensionless {init: 0.46};
    var V_nsr_part: dimensionless {init: 0.0116};
    var R_cell: micrometre {init: 3.9};
    var L_cell: micrometre {init: 67};
    var L_sub: micrometre {init: 0.02};
    V_cell = 0.000000001{micrometre_per_femtometre}*pi*sqr(R_cell)*L_cell;
    V_sub = 0.000000001{micrometre_per_femtometre}*2{dimensionless}*pi*L_sub*(R_cell-L_sub/2{dimensionless})*L_cell;
    V_jsr = V_jsr_part*V_cell;
    V_i = V_i_part*V_cell-V_sub;
    V_nsr = V_nsr_part*V_cell;
  enddef;
  // define the relationship for each ion channels
  // and almost every channel/exchanger/pump were package to a individual module

  def group as containment for
    comp Membrane incl
      comp Nai_concentration;
      comp Cell_parameters;
      comp Voltage_clamp;
      comp i_Kur incl
        comp i_Kur_sKur_gate;
        comp i_Kur_rKur_gate;
      endcomp;
      comp Ca_buffering;
      comp Ca_dynamics;
      comp Rate_modulation_experiments;
      comp i_KACh incl
        comp i_KACh_a_gate;
      endcomp;
      comp i_NaK;
      comp i_CaL incl
        comp i_CaL_fCa_gate;
        comp i_CaL_dL_gate;
        comp i_CaL_fL_gate;
      endcomp;
      comp i_NaCa;
      comp i_Kr incl
        comp i_Kr_pi_gate;
        comp i_Kr_pa_gate;
      endcomp;
      comp i_CaT incl
        comp i_CaT_fT_gate;
        comp i_CaT_dT_gate;
      endcomp;
      comp i_Ks incl
        comp i_Ks_n_gate;
      endcomp;
      comp i_to incl
        comp i_to_q_gate;
        comp i_to_r_gate;
      endcomp;
      comp i_Na incl
        comp i_Na_m_gate;
        comp i_Na_h_gate;
      endcomp;
      comp Ionic_values;
      comp Ca_intracellular_fluxes;
      comp i_f incl
        comp i_f_y_gate;
      endcomp;
      comp Ca_SR_release;
    endcomp;
  enddef;

  def group as encapsulation for
    comp i_CaL incl
      comp i_CaL_fCa_gate;
      comp i_CaL_dL_gate;
      comp i_CaL_fL_gate;
    endcomp;
    comp i_Kr incl
      comp i_Kr_pi_gate;
      comp i_Kr_pa_gate;
    endcomp;
    comp i_CaT incl
      comp i_CaT_fT_gate;
      comp i_CaT_dT_gate;
    endcomp;
    comp i_Kur incl
      comp i_Kur_sKur_gate;
      comp i_Kur_rKur_gate;
    endcomp;
    comp i_KACh incl
      comp i_KACh_a_gate;
    endcomp;
    comp Membrane incl
      comp Voltage_clamp;
    endcomp;
    comp i_Ks incl
      comp i_Ks_n_gate;
    endcomp;
    comp i_Na incl
      comp i_Na_m_gate;
      comp i_Na_h_gate;
    endcomp;
    comp i_to incl
      comp i_to_q_gate;
      comp i_to_r_gate;
    endcomp;
    comp i_f incl
      comp i_f_y_gate;
    endcomp;
  enddef;
  // define the dependence relationship that share common variables
  def map between environment and i_Ks for
    vars time and time;
  enddef;
  def map between Membrane and Voltage_clamp for
    vars time and time;
    vars V_clamp and V_clamp;
  enddef;
  def map between i_f and i_f_y_gate for
    vars time and time;
    vars V and V;
    vars ACh and ACh;
    vars Iso_1_nM and Iso_1_nM;
    vars y and y;
    vars cAMP_nif and cAMP_nif;
  enddef;
  def map between i_to_r_gate and i_to for
    vars r and r;
  enddef;
  def map between Nai_concentration and i_NaCa for
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Ionic_values and i_f for
    vars E_Na and E_Na;
    vars E_K and E_K;
    vars Ko and Ko;
  enddef;
  def map between Ca_intracellular_fluxes and Ca_dynamics for
    vars j_tr and j_tr;
    vars j_up and j_up;
    vars j_Ca_dif and j_Ca_dif;
  enddef;
  def map between i_NaK and Membrane for
    vars i_NaK and i_NaK;
  enddef;
  def map between environment and i_to for
    vars time and time;
  enddef;
  def map between Ionic_values and i_Kur for
    vars E_K and E_K;
  enddef;
  def map between Nai_concentration and i_NaK for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between i_Na_h_gate and i_Na for
    vars h and h;
  enddef;
  def map between Cell_parameters and Nai_concentration for
    vars V_sub and V_sub;
    vars V_i and V_i;
  enddef;
  def map between i_Ks and Membrane for
    vars i_Ks and i_Ks;
  enddef;
  def map between Ionic_values and i_to for
    vars E_K and E_K;
  enddef;
  def map between environment and i_CaT for
    vars time and time;
  enddef;
  def map between i_CaT and Membrane for
    vars i_CaT and i_CaT;
  enddef;
  def map between Ionic_values and i_Ks for
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between Nai_concentration and i_Ks for
    vars Nai and Nai;
  enddef;
  def map between i_Kur and i_Kur_rKur_gate for
    vars time and time;
    vars V and V;
    vars r_Kur and r_Kur;
  enddef;
  def map between i_CaL and Membrane for
    vars i_CaL and i_CaL;
  enddef;
  def map between Membrane and i_CaT for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between Rate_modulation_experiments and i_Ks for
    vars Iso_1_nM and Iso_1_nM;
    vars PKA and PKA;
  enddef;
  def map between i_Ks and i_Ks_n_gate for
    vars time and time;
    vars V and V;
    vars Iso_1_nM and Iso_1_nM;
    vars n and n;
    vars PKA and PKA;
  enddef;
  def map between Membrane and i_Na for
    vars RTONF and RTONF;
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between i_f and Membrane for
    vars i_f and i_f;
  enddef;
  def map between Membrane and i_Kr for
    vars RTONF and RTONF;
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between Ca_dynamics and Ca_intracellular_fluxes for
    vars Cai and Cai;
    vars Ca_jsr and Ca_jsr;
    vars Ca_sub and Ca_sub;
    vars Ca_nsr and Ca_nsr;
  enddef;
  def map between Membrane and Nai_concentration for
    vars F and F;
  enddef;
  def map between i_Na and i_Na_m_gate for
    vars V and V;
    vars time and time;
    vars m and m;
  enddef;
  def map between environment and Membrane for
    vars time and time;
  enddef;
  def map between Ca_dynamics and i_CaL for
    vars Ca_sub and Ca_sub;
    vars i_siCa and i_siCa;
  enddef;
  def map between i_KACh and Membrane for
    vars i_KACh and i_KACh;
  enddef;
  def map between i_CaT_fT_gate and i_CaT for
    vars fT and fT;
  enddef;
  def map between i_CaT and i_CaT_fT_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between Ionic_values and i_NaCa for
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between i_Kur_sKur_gate and i_Kur for
    vars s_Kur and s_Kur;
  enddef;
  def map between i_CaL and Nai_concentration for
    vars i_siNa and i_siNa;
  enddef;
  def map between environment and Nai_concentration for
    vars time and time;
  enddef;
  def map between Rate_modulation_experiments and i_KACh for
    vars ACh and ACh;
  enddef;
  def map between i_Na and i_Na_h_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between Ionic_values and i_Na for
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between Ca_dynamics and Ca_buffering for
    vars Cai and Cai;
    vars Ca_jsr and Ca_jsr;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Ca_dynamics and i_NaCa for
    vars Ca_sub and Ca_sub;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between environment and Ca_dynamics for
    vars time and time;
  enddef;
  def map between Membrane and i_NaK for
    vars V and V;
  enddef;
  def map between Nai_concentration and i_CaL for
    vars Nai and Nai;
  enddef;
  def map between i_Kr_pa_gate and i_Kr for
    vars paF and paF;
    vars paS and paS;
  enddef;
  def map between environment and i_KACh for
    vars time and time;
  enddef;
  def map between Rate_modulation_experiments and Ca_intracellular_fluxes for
    vars ACh and ACh;
    vars Iso_1_nM and Iso_1_nM;
  enddef;
  def map between i_Na and Nai_concentration for
    vars i_Na and i_Na;
  enddef;
  def map between environment and i_CaL for
    vars time and time;
  enddef;
  def map between i_CaL and i_CaL_fCa_gate for
    vars V and V;
    vars Ca_sub and Ca_sub;
    vars time and time;
    vars fCa and fCa;
  enddef;
  def map between Cell_parameters and Ca_dynamics for
    vars V_sub and V_sub;
    vars V_jsr and V_jsr;
    vars V_nsr and V_nsr;
    vars V_i and V_i;
  enddef;
  def map between i_Kur and i_Kur_sKur_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_dynamics and i_CaT for
    vars Ca_sub and Ca_sub;
    vars i_CaT and i_CaT;
  enddef;
  def map between i_Kr and i_Kr_pi_gate for
    vars V and V;
    vars time and time;
    vars piy and piy;
  enddef;
  def map between i_to_q_gate and i_to for
    vars q and q;
  enddef;
  def map between i_CaL and i_CaL_fL_gate for
    vars V and V;
    vars time and time;
    vars fL and fL;
  enddef;
  def map between Rate_modulation_experiments and i_f for
    vars ACh and ACh;
    vars Iso_1_nM and Iso_1_nM;
    vars cAMP_nif and cAMP_nif;
  enddef;
  def map between environment and i_f for
    vars time and time;
  enddef;
  def map between Ca_dynamics and Ionic_values for
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Ca_SR_release and Ca_dynamics for
    vars j_SRCarel and j_SRCarel;
    vars Ca_jsr and Ca_jsr;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_Kr and i_Kr_pa_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between i_KACh_a_gate and i_KACh for
    vars a and a;
  enddef;
  def map between i_f and Nai_concentration for
    vars i_fNa and i_fNa;
  enddef;
  def map between environment and i_Na for
    vars time and time;
  enddef;
  def map between Rate_modulation_experiments and i_NaK for
    vars Iso_1_nM and Iso_1_nM;
    vars PKA and PKA;
  enddef;
  def map between Rate_modulation_experiments and i_CaL for
    vars ACh and ACh;
    vars Iso_1_nM and Iso_1_nM;
    vars PKA and PKA;
  enddef;
  def map between Membrane and i_Ks for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between Ionic_values and i_Kr for
    vars E_K and E_K;
    vars Ko and Ko;
  enddef;
  def map between Membrane and Ionic_values for
    vars RTONF and RTONF;
  enddef;
  def map between Membrane and i_Kur for
    vars V and V;
    vars i_Kur and i_Kur;
  enddef;
  def map between environment and Ca_SR_release for
    vars time and time;
  enddef;
  def map between Ionic_values and i_CaT for
    vars Cao and Cao;
  enddef;
  def map between i_to and i_to_q_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between Ionic_values and i_CaL for
    vars Cao and Cao;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between i_CaL_dL_gate and i_CaL for
    vars dL and dL;
  enddef;
  def map between Membrane and i_CaL for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between i_to and i_to_r_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between environment and i_NaK for
    vars time and time;
  enddef;
  def map between Membrane and i_KACh for
    vars V and V;
  enddef;
  def map between Ionic_values and i_NaK for
    vars E_Na and E_Na;
    vars Ko and Ko;
  enddef;
  def map between Membrane and i_f for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between Nai_concentration and Ionic_values for
    vars Nai and Nai;
  enddef;
  def map between i_NaCa and Membrane for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between i_KACh and i_KACh_a_gate for
    vars ACh and ACh;
    vars time and time;
    vars V and V;
  enddef;
  def map between environment and i_NaCa for
    vars time and time;
  enddef;
  def map between environment and i_Kr for
    vars time and time;
  enddef;
  def map between Ca_buffering and Ca_dynamics for
    vars delta_fTMC and delta_fTMC;
    vars delta_fCMi and delta_fCMi;
    vars delta_fCMs and delta_fCMs;
    vars CQ_tot and CQ_tot;
    vars TC_tot and TC_tot;
    vars CM_tot and CM_tot;
    vars TMC_tot and TMC_tot;
    vars delta_fCQ and delta_fCQ;
    vars delta_fTC and delta_fTC;
  enddef;
  def map between i_CaT and i_CaT_dT_gate for
    vars V and V;
    vars time and time;
    vars dT and dT;
  enddef;
  def map between Membrane and i_NaCa for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between i_CaL and i_CaL_dL_gate for
    vars V and V;
    vars Iso_1_nM and Iso_1_nM;
    vars time and time;
    vars PKA and PKA;
  enddef;
  def map between Membrane and i_to for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between Ionic_values and i_KACh for
    vars E_K and E_K;
  enddef;
  def map between environment and i_Kur for
    vars time and time;
  enddef;
  def map between environment and Ca_buffering for
    vars time and time;
  enddef;
  def map between Membrane and Ca_dynamics for
    vars F and F;
  enddef;
  def map between Nai_concentration and i_Na for
    vars Nai and Nai;
  enddef;
  def map between Membrane and Brain_stem for
    vars time and t;
    vars g and g;
  enddef;
  // end
enddef;
